CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunImageJMacro:[module_num:5|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
    Hidden:1
    Hidden:1
    Hidden:0
    Executable directory:Elsewhere...|C:\\fiji\\Fiji.app
    Executable:ImageJ-win64.exe
    Macro directory:Elsewhere...|C:\\test
    Macro:deepimagejmacro.ijm
    What variable in your macro defines the folder ImageJ should use?:Directory
    Select an image to send to your macro:DNA
    What should this image temporarily saved as?:input.tiff
    What is the image filename CellProfiler should load?:output.tiff
    What should CellProfiler call the loaded image?:segmented

SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:segmented
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\test\\output
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
